PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  color = white
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = lossaver_study
  Screen = 1
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Routines
  Routine cond_instr
    TextComponent instr_text
      wrapWidth = 1200
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        In the following task, you will be presented with a cue followed by
        an image. If the cue was green, correctly identifying that image
        as indoor or outdoor will reward you with 50 cents. If the cue is red,
        failing to correctly identify that image will cause you to lose 50 cents.

        When an object image is presented, your task is to classify that image as
        an indoor or outdoor object.

                                     1 = Indoor                  2 = Outdoor

        Press Return when you are ready to begin.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent stimulus_setup
      Begin Experiment:
        import numpy as np
        import os
        import numpy.random as nr
        from glob import glob
        from copy import deepcopy
        #Create randomized list of stimuli with their correct classification
        stimbase = sorted(glob('stimuli/*a.jpg'))

        stimclass = np.genfromtxt('stimclass.csv',
                                   delimiter=',').tolist()
        combo = zip(stimbase, stimclass)

        combo = nr.permutation(combo).tolist()
        stimbase_rand, stimclass_rand = zip(*combo)
        stimbase_rand = list(stimbase_rand)
        stimclass_rand = list(stimclass_rand)
        #Creates dictionary for each variable
        stim_dict = {}
        corr_dict = {}
        trial_dict = {}
        side_dict = {}
        amt_dict = {}
        isi_dict = {}
        fisi_dict = {}
        for run in range(1,5):
            #Create stimulus and classification list
            stim_list = []
            class_list = []
            for i in range(54):
                stim_list.append(stimbase_rand.pop())
                class_list.append(stimclass_rand.pop())
            stim_dict['{}'.format(run)] = stim_list
            corr_dict['{}'.format(run)] = class_list
            #Create Trial Type List
            flatten = lambda l: [item for sublist in l for item in sublist]
            list_tuple = (1,1)
            reward_loss_list = []
            rew_list = []
            loss_list = []
            neu_list = []
            for i in range(9):
                rew_list.append(1)
                loss_list.append(2)
                neu_list.append(3)
            reward_loss_list = deepcopy(rew_list) + deepcopy(loss_list) + deepcopy(neu_list)
            trial_type_list = []
            for item in reward_loss_list:
                new_item = np.array(list_tuple) * item
                trial_type_list.append(new_item.tolist())
            trial_type_list = nr.permutation(trial_type_list)
            trial_type_list = flatten(trial_type_list)
            #Creates list of side to present on
            side_seed_dict = {}
            side_seed_list = np.ones(9).tolist() + (np.ones(9) * 2).tolist()
            for i, item in enumerate(side_seed_list):
                if item == 1:
                    side_seed_list[i] = 'left'
                elif item ==2:
                    side_seed_list[i] = 'right'
            side_seed_dict['1'] = nr.permutation(deepcopy(side_seed_list)).tolist()
            side_seed_dict['2'] = nr.permutation(deepcopy(side_seed_list)).tolist()
            side_seed_dict['3'] = nr.permutation(deepcopy(side_seed_list)).tolist()
            side_list = []
            for item in trial_type_list:
                side_list.append(side_seed_dict['{}'.format(item)].pop())
            side_dict['{}'.format(run)] = side_list
            #Creates List of awarded amounts
            amt_seed_dict = {}
            amt_seed_list = (np.ones(9) * 0.50).tolist()
            amt_seed_dict['1_left'] = nr.permutation(deepcopy(amt_seed_list)).tolist()
            amt_seed_dict['1_right'] = nr.permutation(deepcopy(amt_seed_list)).tolist()
            amt_seed_dict['2_left'] = nr.permutation(deepcopy(amt_seed_list)).tolist()
            amt_seed_dict['2_right'] = nr.permutation(deepcopy(amt_seed_list)).tolist()
            amt_seed_dict['3_left'] = np.zeros(9).tolist()
            amt_seed_dict['3_right'] = np.zeros(9).tolist()
            amt_list = []
            for i, item in enumerate(trial_type_list):
                if side_list[i] == 'left':
                    amt_list.append(amt_seed_dict['{}_{}'.format(item, side_list[i])].pop())
                elif side_list[i] == 'right':
                    amt_list.append(amt_seed_dict['{}_{}'.format(item, side_list[i])].pop())
            amt_dict['{}'.format(run)] = amt_list
            for i, item in enumerate(trial_type_list):
                if item == 1:
                    trial_type_list[i] = 'reward'
                elif item == 2:
                    trial_type_list[i] = 'loss'
                elif item == 3:
                    trial_type_list[i] = 'neutral'
            trial_dict['{}'.format(run)] = trial_type_list
            #creates list of interstimulus durations
            isi_list = []
            fisi_list = []
            for i in range(18):
                isi_list.extend((4,5,6))
            isi_list = nr.permutation(isi_list).tolist()
            fisi_list = nr.permutation(isi_list).tolist()
            isi_dict['{}'.format(run)] = isi_list
            fisi_dict['{}'.format(run)] = fisi_list
        earn_amt = 10.00
        earn_txt = format(earn_amt, '.2f')
      End Routine:
        trial_clock = core.MonotonicClock()
  Routine cue
    PolygonComponent cue_box
      fillColor = $[1.000,1.000,1.000]
      stopVal [duration (s)] = .500
      pos [set during: cue.ISI] = (cuepos, 0)
      lineWidth = 40
      units = pix
      lineColor [set during: cue.ISI] = $cuecolor
      startVal [time (s)] = $fisidur
      size = (420, 420)
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    CodeComponent cue_code
      Begin Experiment:
        cuecolor = 'grey'
        cueamt = None
        cuepres = None
        cuepos = ''
      Begin Routine:
        trial_id = '{}'.format(run_index)
        stim = stim_dict[trial_id][trial_index]
        stimans = int(float(corr_dict[trial_id][trial_index]))
        trial_type = trial_dict[trial_id][trial_index]
        if trial_type == 'neutral':
            cuecolor = 'grey'
        elif trial_type == 'reward':
            cuecolor = 'green'
        elif trial_type == 'loss':
            cuecolor = 'red'
        if side_dict[trial_id][trial_index] == 'left':
            cuepos = -300
        elif side_dict[trial_id][trial_index] == 'right':
            cuepos = 300

        rew_amt = amt_dict[trial_id][trial_index]
        isidur = isi_dict[trial_id][trial_index]
        fisidur = fisi_dict[trial_id][trial_index]
      End Routine:
        trials.addData('cue_time', float(trial_clock.getTime()) - 0.500)
        trials.addData('stimside', side_dict[trial_id][trial_index])
        trials.addData('fisi_dur', fisidur)
    PolygonComponent fixation_cue
      fillColor = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = $fisidur
      units = pix
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (25, 25)
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    TextComponent cue_money_count
      color = black
      stopVal [duration (s)] = $fisidur + 0.5
      pos = (0, -300)
      startVal [time (s)] = 0.0
      letterHeight = 60
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      text [set every repeat]:
        $earn_txt
  Routine trial
    CodeComponent trial_code
      Begin Experiment:
        from random import choice
        color_1 = color_2 = 'white'
        polyopa_1 = polyopa_2 = 0
        stimans = ''
      Begin Routine:
        color_1 = color_2 = 'white'
      End Routine:
        trials.addData('stimulus', stim[-8:])
        trials.addData('stimans', stimans)
        trials.addData('rwd_amt', rew_amt)
        trials.addData('isidur', isidur)
        trials.addData('trialtype', trial_type)
        rewd_amt = format(rew_amt, '.2f')
        if trial_resp.corr == 1 and trial_type =='reward':
            fdbck_txt = 'Correct \n +{}'.format(rewd_amt)
            fdbck_color = 'Green'
            earn_amt += float(rew_amt)
        elif trial_resp.corr == 1 and trial_type != 'reward':
            fdbck_txt = 'Correct'
            fdbck_color = 'Green'
        elif trial_resp.corr == 0 and trial_type == 'loss':
            fdbck_txt = 'Incorrect \n -{}'.format(rewd_amt)
            fdbck_color = 'Red'
            earn_amt -= float(rew_amt)
        elif trial_resp.corr == 0 and trial_type != 'loss':
            fdbck_txt = 'Incorrect'
            fdbck_color = 'Red'
        earn_txt = format(earn_amt, '.2f')
        trials.addData('trial_clock', float(trial_clock.getTime()) - 1.000)
        trials.addData('earn_amt', earn_txt)
      Each Frame:
        if len(trial_resp.keys) != 0:
            # Save the corresponding box as which_box
            which_box = trial_resp.keys[0]
            # Execute the format function for the color fill of the selected box
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box))
    PolygonComponent poly_left
      opacity [set every repeat] = polyopa_1
      fillColor [set every frame] = $color_1
      stopVal [duration (s)] = 1.0
      pos = (-250, -300)
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0
      size = (100, 100)
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    PolygonComponent poly_right
      opacity [set every repeat] = polyopa_2
      fillColor [set every frame] = $color_2
      stopVal [duration (s)] = 1.0
      pos = (250, -300)
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0
      size = (100, 100)
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    KeyboardComponent trial_resp
      correctAns = $stimans
      storeCorrect = True
      stopVal [duration (s)] = 1.0
      forceEndRoutine = False
      allowedKeys = '1', '2'
      startVal [time (s)] = 0
      store = first key
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    PolygonComponent cue_box_trial
      fillColor = $[1.000,1.000,1.000]
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = (cuepos, 0)
      lineWidth = 40
      units = pix
      lineColor [set every repeat] = $cuecolor
      startVal [time (s)] = 0.0
      size = (420, 420)
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    ImageComponent stimulus_image
      opacity [set every repeat] = 1
      color [set every repeat] = $[1.000,1.000,1.000]
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = (cuepos, 0)
      startVal [time (s)] = 0
      image [set every repeat] = $stim
      size = (400, 400)
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    TextComponent trial_money_amt
      color = black
      stopVal [duration (s)] = 1.0
      pos = (0, -300)
      startVal [time (s)] = 0.0
      letterHeight = 60
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      text [set every repeat]:
        $earn_txt
  Routine feedback
    TextComponent feedback_text
      color [set every repeat] = $fdbck_color
      text [set every repeat] = $fdbck_txt
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0
      letterHeight = 60
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    TextComponent feedback_money_count
      color = black
      stopVal [duration (s)] = 0.5
      pos = (0, -300)
      startVal [time (s)] = 0.0
      letterHeight = 60
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      text [set every repeat]:
        $earn_txt
    CodeComponent feedback_time
      End Routine:
        trials.addData('feedback_clock', float(trial_clock.getTime()) - 0.500)
  Routine intercue
    PolygonComponent fixation_intercue
      fillColor = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = $isidur
      units = pix
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (25, 25)
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    TextComponent intercue_money_amt
      color = black
      text [set every repeat] = $earn_txt
      stopVal [duration (s)] = $isidur
      pos = (0, -300)
      startVal [time (s)] = 0.0
      letterHeight = 60
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Flow
  LoopInitiator run loopType="TrialHandler"
    conditionsFile = runs_study.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'run_index': 1},
      {u'run_index': 2},
      {u'run_index': 3},
      {u'run_index': 4}]
    Routine cond_instr
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trials_study.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{u'trial': 1, u'trial_index': 0},
        {u'trial': 1, u'trial_index': 1},
        {u'trial': 1, u'trial_index': 2},
        {u'trial': 1, u'trial_index': 3},
        {u'trial': 1, u'trial_index': 4},
        {u'trial': 1, u'trial_index': 5},
        {u'trial': 1, u'trial_index': 6},
        {u'trial': 1, u'trial_index': 7},
        {u'trial': 1, u'trial_index': 8},
        {u'trial': 1, u'trial_index': 9},
        {u'trial': 1, u'trial_index': 10},
        {u'trial': 1, u'trial_index': 11},
        {u'trial': 1, u'trial_index': 12},
        {u'trial': 1, u'trial_index': 13},
        {u'trial': 1, u'trial_index': 14},
        {u'trial': 1, u'trial_index': 15},
        {u'trial': 1, u'trial_index': 16},
        {u'trial': 1, u'trial_index': 17},
        {u'trial': 1, u'trial_index': 18},
        {u'trial': 1, u'trial_index': 19},
        {u'trial': 1, u'trial_index': 20},
        {u'trial': 1, u'trial_index': 21},
        {u'trial': 1, u'trial_index': 22},
        {u'trial': 1, u'trial_index': 23},
        {u'trial': 1, u'trial_index': 24},
        {u'trial': 1, u'trial_index': 25},
        {u'trial': 1, u'trial_index': 26},
        {u'trial': 1, u'trial_index': 27},
        {u'trial': 1, u'trial_index': 28},
        {u'trial': 1, u'trial_index': 29},
        {u'trial': 1, u'trial_index': 30},
        {u'trial': 1, u'trial_index': 31},
        {u'trial': 1, u'trial_index': 32},
        {u'trial': 1, u'trial_index': 33},
        {u'trial': 1, u'trial_index': 34},
        {u'trial': 1, u'trial_index': 35},
        {u'trial': 1, u'trial_index': 36},
        {u'trial': 1, u'trial_index': 37},
        {u'trial': 1, u'trial_index': 38},
        {u'trial': 1, u'trial_index': 39},
        {u'trial': 1, u'trial_index': 40},
        {u'trial': 1, u'trial_index': 41},
        {u'trial': 1, u'trial_index': 42},
        {u'trial': 1, u'trial_index': 43},
        {u'trial': 1, u'trial_index': 44}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
      Routine cue
      Routine intercue
      Routine trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator run
