PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = lossaver_test_imm
  Screen = 1
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Routines
  Routine introduction
    TextComponent text
      wrapWidth = 1200
      color = $[-1.000,-1.000,-1.000]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        In the following task, you will be presented with images from the previous study session and new previously unseen images.

        Your task is to identify whether each image is old or new.

                          1 = Old                        2 = New

        When you identify an image as old, you will then be asked to
        identify which side of the screen it was presented on.

                          1 = Left                       2 = Right

        Press Return when you are ready to begin.
    KeyboardComponent intro_resp
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent begin_setup
      Begin Experiment:
        import pandas as pd
        from glob import glob
        import numpy.random as nr
        prev_data = pd.read_csv(glob('data/{}_lossaver_study_*.csv'.format(expInfo['participant']))[0])
        prev_stimuli = prev_data['stimulus']
        prev_type = prev_data['trialtype']
        prev_side = prev_data['stimside']

        combo = zip(prev_type, prev_stimuli, prev_side)
        combo = sorted(combo)

        prev_type_sort, prev_stim_sort, prev_side_sort = zip(*combo)

        prev_loss = prev_stim_sort[:72]
        prev_loss_side = prev_side_sort[:72]
        combo_loss = sorted(zip(prev_loss_side, prev_loss))
        _, prev_loss_list = zip(*combo_loss)
        prev_loss_left = prev_loss_list[:36]
        prev_loss_right = prev_loss_list[36:]

        prev_neutral = prev_stim_sort[72:144]
        prev_neutral_side = prev_side_sort[72:144]
        combo_neutral = sorted(zip(prev_neutral_side, prev_neutral))
        _, prev_neutral_list = zip(*combo_neutral)
        prev_neutral_left = prev_neutral_list[:36]
        prev_neutral_right = prev_neutral_list[36:]

        prev_reward = prev_stim_sort[144:]
        prev_reward_side = prev_side_sort[144:]
        combo_reward = sorted(zip(prev_reward_side, prev_reward))
        _, prev_reward_list = zip(*combo_reward)
        prev_reward_left = prev_reward_list[:36]
        prev_reward_right = prev_reward_list[36:]
        new_list = sorted(glob('stimuli/new/*a.jpg'))
        new_list_rand = nr.permutation(new_list).tolist()

        prev_loss_left = nr.permutation(prev_loss_left).tolist()
        prev_loss_right = nr.permutation(prev_loss_right).tolist()
        prev_neutral_left = nr.permutation(prev_neutral_left).tolist()
        prev_neutral_right = nr.permutation(prev_neutral_right).tolist()
        prev_reward_left = nr.permutation(prev_reward_left).tolist()
        prev_reward_right = nr.permutation(prev_reward_right).tolist()

        stim_dict = {}
        type_dict = {}
        side_dict = {}
        for run in range(1, 4):
            stim_list = []
            type_list = []
            side_list = []
        #Creates list of 24 old trials (8 of each type, 4 on each side)
            for i in range(4):
                stim_list.append('stimuli/' + prev_loss_left.pop())
                side_list.append('left')
                stim_list.append('stimuli/' + prev_loss_right.pop())
                side_list.append('right')
                type_list.extend(('loss', 'loss'))
                stim_list.append('stimuli/' + prev_neutral_left.pop())
                side_list.append('left')
                stim_list.append('stimuli/' + prev_neutral_right.pop())
                side_list.append('right')
                type_list.extend(('neutral', 'neutral'))
                stim_list.append('stimuli/' + prev_reward_left.pop())
                side_list.append('left')
                stim_list.append('stimuli/' + prev_reward_right.pop())
                side_list.append('right')
                type_list.extend(('reward', 'reward'))
                stim_list.extend((new_list_rand.pop(),
                                  new_list_rand.pop(),
                                  new_list_rand.pop(),
                                  new_list_rand.pop(),
                                  new_list_rand.pop(),
                                  new_list_rand.pop()))
                type_list.extend(('new', 'new', 'new',
                                  'new','new', 'new'))
                side_list.extend(('new', 'new', 'new',
                                  'new', 'new', 'new'))

            combo_stim_type = zip(stim_list, type_list, side_list)
            combo_stim_type = nr.permutation(combo_stim_type)
            stim_list_rand, type_list_rand, side_list_rand = zip(*combo_stim_type)
            stim_dict['{}'.format(run)] = stim_list_rand
            type_dict['{}'.format(run)] = type_list_rand
            side_dict['{}'.format(run)] = side_list_rand
        #Following code makes sure even amounts of stimuli are gathered for each level of reward
        stim_opa = 0
        trial_opa = 0
      End Routine:
        trial_clock = core.MonotonicClock()
  Routine trial
    ImageComponent trial_image
      units = pix
      startVal [time (s)] = 0.5
      image [set during: trial.ISI] = $stim
      size = (400, 400)
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    CodeComponent trial_code
      Begin Experiment:
        color_1 = color_2 = 'white'
      Begin Routine:
        stim = stim_dict['{}'.format(run_index)][trial_index]

        if type_dict['{}'.format(run_index)][trial_index] in ['reward', 'loss', 'neutral']:
            stimans = 1
        else:
            stimans = 2

        trial_onset = trial_clock.getTime()
      End Routine:
        type_response = ''
        followup_dur = 0
        follow_waste = 2.5
        color_1 = color_2 = 'white'
        corr_side = None

        if side_dict['{}'.format(run_index)][trial_index] == 'left':
            corr_side = 1
        elif side_dict['{}'.format(run_index)][trial_index] == 'right':
            corr_side = 2
        trials.addData('oldvsnew', type_response)
        if type_dict['{}'.format(run_index)][trial_index] != 'new':
            stim_old = stim[-8:]
            stim_new = None
        elif type_dict['{}'.format(run_index)][trial_index] == 'new':
            stim_new = stim[-8:]
            stim_old = None

        if len(trial_resp.keys) != 0:
            if int(trial_resp.keys[-1]) == 1:
                type_response = 'old'
                followup_dur = 15
                follow_waste = 0
                followup_ans = corr_side
            elif int(trial_resp.keys[-1]) == 2:
                type_response = 'new'
                followup_dur = 0
                follow_waste = 2.5
                followup_ans = None
        else:
            type_response = 'none'
            followup_dur = 2.5

        trials.addData('stim', stim)
        trials.addData('stim_old', stim_old)
        trials.addData('stim_new', stim_new)
        trials.addData('trial_type', type_dict['{}'.format(run_index)][trial_index])
        trials.addData('stim_side' , side_dict['{}'.format(run_index)][trial_index])

        if len(trial_resp.keys) != 0:
            # Save the corresponding box as which_box
            which_box = trial_resp.keys[0]
            # Execute the format function for the color fill of the selected box
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box))
        stim_opa = 1
        text_size = 1
        trial_resp_dur = 0.5
        trials.addData('trial_onset', trial_onset)
        trials.addData('stim_onset', trial_onset + 0.5)
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent trial_resp
      correctAns = $stimans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0.5
      store = first key
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    PolygonComponent poly_left_trial
      fillColor [set every frame] = $color_1
      pos = (-250, -300)
      units = pix
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.5
      size = (100, 100)
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    PolygonComponent poly_right_trial
      fillColor [set every frame] = $color_2
      pos = (250, -300)
      units = pix
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.5
      size = (100, 100)
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    PolygonComponent fixation_cue
      fillColor = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 0.5
      units = pix
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (25, 25)
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  Routine followup
    PolygonComponent time_waste
      fillColor = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = $follow_waste
      units = pix
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (25,25)
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    CodeComponent followup_code
      Begin Routine:
        followup_onset = trial_clock.getTime()
      End Routine:
        color_1 = color_2 = 'white'
        if followup_resp.corr == 1:
            corr_loc = 'correct'
        elif followup_resp.corr == 0:
            corr_loc = 'incorrect'
        trials.addData('corr_location', corr_loc)
        trial_resp_dur = 0.5
        if len(followup_resp.keys) != 0:
            # Save the corresponding box as which_box
            which_box = followup_resp.keys[0]
            # Execute the format function for the color fill of the selected box
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box))
            trial_resp_dur = 0.5
        elif len(followup_resp.keys) == 0:
            trial_resp_dur = 0
        stim_opa = 0
        text_size = 60
        trials.addData('followup_onset', followup_onset)
    TextComponent followup_text
      wrapWidth = 1200
      color = black
      stopVal [duration (s)] = $followup_dur
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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      text:
                  Left or Right?



        1 = Left                 2 = Right
    KeyboardComponent followup_resp
      correctAns = $followup_ans
      storeCorrect = True
      stopVal [duration (s)] = $followup_dur
      forceEndRoutine = True
      allowedKeys = '1', '2'
      startVal [time (s)] = 0.0
      store = first key
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    PolygonComponent poly_left_followup
      fillColor [set every repeat] = $color_1
      stopVal [duration (s)] = $followup_dur
      pos = (-250, -300)
      units = pix
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.0
      size = (100, 100)
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    PolygonComponent poly_right_followup
      fillColor [set every repeat] = $color_2
      stopVal [duration (s)] = $followup_dur
      pos = (250, -300)
      units = pix
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.0
      size = (100, 100)
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  Routine trial_response
    PolygonComponent polygon_left
      fillColor [set every repeat] = $color_1
      stopVal [duration (s)] = $trial_resp_dur
      pos = (-250, -300)
      units = pix
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.0
      size = (100, 100)
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    PolygonComponent polygon_right
      fillColor [set every repeat] = $color_2
      stopVal [duration (s)] = $trial_resp_dur
      pos = (250, -300)
      units = pix
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.0
      size = (100, 100)
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    CodeComponent resp_code
      End Routine:
        color_1 = color_2 = 'white'
    TextComponent resp_text
      wrapWidth = 1200
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = $trial_resp_dur
      units = pix
      startVal [time (s)] = 0.0
      letterHeight [set every repeat] = $text_size
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      text:
                  Left or Right?



        1 = Left                 2 = Right
    ImageComponent resp_image
      opacity [set every repeat] = stim_opa
      stopVal [duration (s)] = $trial_resp_dur
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $stim
      size = (400, 400)
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Flow
  Routine introduction
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs_test.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'run_index': 1},
      {u'run_index': 2},
      {u'run_index': 3}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = test_trials_imm.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{u'trial_index': 0},
        {u'trial_index': 1},
        {u'trial_index': 2},
        {u'trial_index': 3},
        {u'trial_index': 4},
        {u'trial_index': 5},
        {u'trial_index': 6},
        {u'trial_index': 7},
        {u'trial_index': 8},
        {u'trial_index': 9},
        {u'trial_index': 10},
        {u'trial_index': 11},
        {u'trial_index': 12},
        {u'trial_index': 13},
        {u'trial_index': 14},
        {u'trial_index': 15},
        {u'trial_index': 16},
        {u'trial_index': 17},
        {u'trial_index': 18},
        {u'trial_index': 19},
        {u'trial_index': 20},
        {u'trial_index': 21},
        {u'trial_index': 22},
        {u'trial_index': 23},
        {u'trial_index': 24},
        {u'trial_index': 25},
        {u'trial_index': 26},
        {u'trial_index': 27},
        {u'trial_index': 28},
        {u'trial_index': 29},
        {u'trial_index': 30},
        {u'trial_index': 31},
        {u'trial_index': 32},
        {u'trial_index': 33},
        {u'trial_index': 34},
        {u'trial_index': 35},
        {u'trial_index': 36},
        {u'trial_index': 37},
        {u'trial_index': 38},
        {u'trial_index': 39},
        {u'trial_index': 40},
        {u'trial_index': 41},
        {u'trial_index': 42},
        {u'trial_index': 43},
        {u'trial_index': 44},
        {u'trial_index': 45},
        {u'trial_index': 46},
        {u'trial_index': 47}]
      Routine trial
      Routine trial_response
      Routine followup
      Routine trial_response
    LoopTerminator trials
  LoopTerminator runs
